CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:52
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Scan_(?P<DateString>.*)_Well_(?P<WellRow>[A-P]{1})(?P<WellColumn>[0-9]{1,2})_Ch1_(?P<PixelScale>.*)um_rescale(?P<Probability>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "rescale.tiff")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "Probabilities.tiff")
    Name to assign these images:Probabilities
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ch_0_Inverted
    Image or measurement?:Image
    Select the first image:Brightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:6|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
    Select the input image:ch_0_Inverted
    Name the output image:ch_0_InvertedThresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.98,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ErodeImage:[module_num:7|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
    Select the input image:ch_0_InvertedThresh
    Name the output image:ch_0_Erosion
    Structuring element:Disk,1

DilateImage:[module_num:8|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
    Select the input image:ch_0_Erosion
    Name the output image:ch_0_InvertedEroded
    Structuring element:Disk,1

ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ch_0_Inverted
    Image or measurement?:Image
    Select the first image:Brightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:10|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
    Select the input image:ch_0_Inverted
    Name the output image:ch_0_InvertedMask
    Use objects or an image as a mask?:Image
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    Select image for mask:ch_0_InvertedEroded
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:ch_0_InvertedMask
    Name the primary objects to be identified:InvertedWell
    Typical diameter of objects, in pixel units (Min,Max):20,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.73,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Brightfield
    Name the primary objects to be identified:NonInvertedWell
    Typical diameter of objects, in pixel units (Min,Max):1250,1500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:1500
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,0.1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:InvertedWell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:InvertedWell
    Name the output objects:FilteredInvertedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:375
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:FilteredInvertedObjects
    Name the objects to be identified:InvertedBubbleEdges
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Brightfield
    Number of pixels by which to expand the primary objects:25
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:FilteredInvertedObjects
    Name the output image:InvertedWellImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:NonInvertedWell
    Name the output image:NonInvertedWellImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:18|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WellImageAfterMath
    Image or measurement?:Image
    Select the first image:NonInvertedWellImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedWellImage
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:WellImageAfterMath
    Name the primary objects to be identified:Well
    Typical diameter of objects, in pixel units (Min,Max):1250,1500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:1500
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:20|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
    Select the input objects:Well
    Name the output objects:WellEdgesMasked
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:WellEdgesMasked
    Name the output image:WellMaskImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:InvertedBubbleEdges
    Name the output image:InvertedBubbleEdgesMaskImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:23|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
    Operation:And
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ShavedBubbleMaskImage
    Image or measurement?:Image
    Select the first image:WellMaskImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertedBubbleEdgesMaskImage
    Multiply the second image by:1.0
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
ImageMath:[module_num:24|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BubbleAndWellMaskImage
    Image or measurement?:Image
    Select the first image:WellMaskImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ShavedBubbleMaskImage
    Multiply the second image by:1.0
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
MaskImage:[module_num:25|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
    Select the input image:Brightfield
    Name the output image:MaskedInvertedWellImage
    Use objects or an image as a mask?:Image
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    Select image for mask:BubbleAndWellMaskImage
    Invert the mask?:No

MaskImage:[module_num:26|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
    Select the input image:Probabilities
    Name the output image:MaskedProbabilityImage
    Use objects or an image as a mask?:Image
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    Select image for mask:BubbleAndWellMaskImage
    Invert the mask?:No

ColorToGray:[module_num:27|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
    Select the input image:MaskedProbabilityImage
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:ColonyArea
    Convert green to gray?:Yes
    Name the output image:BallingArea
    Convert blue to gray?:Yes
    Name the output image:BackgroundArea
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
IdentifyPrimaryObjects:[module_num:28|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
    Select the input image:BallingArea
    Name the primary objects to be identified:BallingObjects
    Typical diameter of objects, in pixel units (Min,Max):20,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:29|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enabled:False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
    Select object sets to measure:BallingObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

EnhanceEdges:[module_num:30|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enabled:False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
    Select the input image:MaskedInvertedWellImage
    Name the output image:EdgedImage
    Automatically calculate the threshold?:No
    Absolute threshold:0.045
    Threshold adjustment factor:1.0
    Select an edge-finding method:Canny
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    Calculate Gaussian's sigma automatically?:No
    Gaussian's sigma value:.5
    Calculate value for low threshold automatically?:Yes
    Low threshold value:0.05

EnhanceEdges:[module_num:31|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enabled:False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
    Select the input image:MaskedInvertedWellImage
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:32|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColonyArea
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BallingArea
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:33|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:ColonyBeforeHolesFilled
    Typical diameter of objects, in pixel units (Min,Max):20,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1
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    Log transform before thresholding?:No
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
FillObjects:[module_num:34|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
    Select the input object:ColonyBeforeHolesFilled
    Name the output object:Colony
    Minimum hole size:30.0
    Planewise fill:No

RelateObjects:[module_num:35|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
    Parent objects:Colony
    Child objects:BallingObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:36|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
    Select object sets to measure:BallingObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:37|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
    Select images to measure:BallingArea, Brightfield, ColonyArea
    Select objects to measure:BallingObjects, Colony

ClassifyObjects:[module_num:38|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:3
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:ballcrater
    Name the output objects:BallCraterClassifiedObjects
    Select a class:edge
    Name the output objects:EdgeClassifiedObjects
    Select a class:deadcells
    Name the output objects:deadcellsObjects
    Select the object name:BallingObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Elsewhere...|\\\\allen\\aics\\microscopy\\CellProfiler_4.1.3_Testing\\4.2.1_PipelineUpdate
    Rules or classifier file name:colony_morphology.model

FilterObjects:[module_num:39|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enabled:False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
    Select the objects to filter:BallingObjects
    Name the output objects:BallCraterObjects
    Select the filtering mode:Classifiers
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    Select the location of the rules or classifier file:Default Input Folder|
    Rules or classifier file name:colony_morphology.model
    Class name:ballcrater
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
FilterObjects:[module_num:40|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enabled:False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
    Select the objects to filter:BallingObjects
    Name the output objects:EdgeObjects
    Select the filtering mode:Classifiers
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    Select the location of the rules or classifier file:Default Input Folder|
    Rules or classifier file name:colony_morphology.model
    Class name:edge
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
RelateObjects:[module_num:41|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
    Parent objects:Colony
    Child objects:BallCraterClassifiedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:42|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
    Parent objects:Colony
    Child objects:EdgeClassifiedObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:43|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
    Select object sets to measure:BallingObjects, Colony
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

OverlayObjects:[module_num:44|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
    Input:Brightfield
    Name the output image:OverlayColonyObjects
    Objects:Colony
    Opacity:0.05

OverlayOutlines:[module_num:45|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OverlayColonyObjects
    Name the output image:ColonyOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:Colony
    Select outline color:red
    Select objects to display:BallCraterClassifiedObjects
    Select outline color:#FF8000
    Select objects to display:EdgeClassifiedObjects

DisplayDataOnImage:[module_num:46|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
    Display object or image measurements?:Object
    Select the input objects:Colony
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:ColonyOverlay
    Text color:blue
    Name the output image that has the measurements displayed:DisplayImage1
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:47|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Colony
    Measurement to display:Children_BallCraterClassifiedObjects_Count
    Select the image on which to display the measurements:DisplayImage1
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:48|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Colony
    Measurement to display:Children_EdgeClassifiedObjects_Count
    Select the image on which to display the measurements:DisplayImage2
    Text color:#FF8000
    Name the output image that has the measurements displayed:DisplayImage3
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureImageIntensity:[module_num:49|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
    Select images to measure:BallingArea, ColonyArea
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:BallingObjects, Colony
    Calculate custom percentiles:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|\g<ch_0_out_dir>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:51|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:BallingObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:52|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\g<file_out_dir>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Colony
    Combine these object measurements with those of the previous object?:No
    File name:ColonyDATA.csv
    Use the object name for the file name?:No
    Data to export:BallCraterClassifiedObjects
    Combine these object measurements with those of the previous object?:No
    File name:BallCraterClassifiedDATA.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:ImageDATA.csv
    Use the object name for the file name?:No
    Data to export:EdgeClassifiedObjects
    Combine these object measurements with those of the previous object?:No
    File name:EdgeClassifiedDATA.csv
    Use the object name for the file name?:No
